PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '', 'id': '', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['cross_white.png', 'tick_white.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = estroop
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Routines
  Routine start
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        colours = [['red','d'],['blue','f'],['yellow','j'],['green','k']]
        shuffle(colours)
        buttonSize=.2
        buttonGap=.2
        buttonOffset=.3
        touchscreen=0
        nBlocks = 3
        #https://run.pavlovia.org/Wake/emotional-stroop/html/?participant=${e://Field/participant}&id=${e://Field/ResponseID}&group=${e://Field/group}&researcher=${e://Field/researcher}
        if expInfo['group']=='1':
            ivLevels=['Practice','Neutral','Negative','Positive']
            block_selection = [['45:75','Positive',2],['75:105','Negative',3]]
        else:
            ivLevels=['Practice','Neutral','Positive','Negative']
            block_selection = [['75:105','Negative',3],['45:75','Positive',2]]
        block_selection.append(['15:45','Neutral',1])
        block_selection.append(['0:15','Practice',0])
        weblink='https://brookeshls.co1.qualtrics.com/jfe/preview/SV_4GFvF9AAzBNbO5M?Q_CHL=preview&Q_SurveyVersionID=current&'
        nBlocks=4
        thisIndex=0
        #shuffle(block_selection)
        #count, score, RT
        block_results = [[0,0,0],[0,0,0],[0,0,0],[0,0,0]]
        showFeedback = 1
        weblink+='participant='+expInfo['participant']+'&id='+expInfo['id']+'&researcher='+expInfo['researcher']
      Begin Routine:
        mouserec = mouse.getPos()
        instructions.text='This experiment consists of a Stroop task.\n\nIn this task you will be presented with a series of words.\nEach screen will show a single word, these words will appear in different colours (green, yellow, blue and red).\nYour job is to indicate the colour that the word is printed in as quickly and as accurately as possible. \nClick the button on the screen that corresponds to that colour. \n\nTouch Start if you  understand the instructions and are ready to begin.'
      Each Frame:
        mouseloc = mouse.getPos()
        if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
            pass
        elif rec.contains(mouse):
            touchscreen=1
            fixation.setPos([0,.3])
            stroop_text.setPos([0,.3])
            image.setPos([0,.3])
            continueRoutine = False
      End Routine:
        if touchscreen == 0:
            button1.setOpacity(0)
            button2.setOpacity(0)
            button3.setOpacity(0)
            button4.setOpacity(0)
            button1_2.setOpacity(0)
            button2_2.setOpacity(0)
            button3_2.setOpacity(0)
            button4_2.setOpacity(0)
            rec_2.setOpacity(0)
    TextComponent instructions
      letterHeight = 0.05
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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    KeyboardComponent instructions_key
      allowedKeys = ['space']
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $'Before you start, please attach the coloured stickers\n'+colours[0][0]+' goes on the '+colours[0][1]+ ' key, '+colours[1][0]+' on the '+colours[1][1]+', '+colours[2][0]+' on the '+colours[2][1]+', and '+colours[3][0]+' on the '+colours[3][1]+'.'
      units = height
      wrapWidth = 1.8
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    PolygonComponent rec
      fillColor = $[0.2,0.2,.2]
      lineWidth = 5
      pos = (0, -.45)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.09)
      startVal [time (s)] = 0.0
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    TextComponent start_button
      letterHeight = 0.08
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Start
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  Routine stroop
    TextComponent fixation
      letterHeight = 0.15
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      text = +
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    CodeComponent stroop_code
      Code Type = Auto->JS
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      Begin Routine:
        thisColour=useColours.pop()
        thisExp.addData('Colour',colours[thisColour][0])
        thisExp.addData('Answer',colours[thisColour][1])
        response=99
        Score=0
        butcol1='white'
        butcol2='white'
        butcol3='white'
        butcol4='white'
      Each Frame:
        if t < .5:
            mouserec = mouse.getPos()
        else:
            mouseloc = mouse.getPos()
            if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
                pass
            elif button1.contains(mouse):
                response=0
                butcol1='yellow'
            elif button2.contains(mouse):
                response=1
                butcol2='yellow'
            elif button3.contains(mouse):
                response=2
                butcol3='yellow'
            elif button4.contains(mouse):
                response=3
                butcol4='yellow'
            if response < 99:
                if response==thisColour:
                    Score = 1
                continueRoutine=False
      End Routine:
        block_results[thisBlock[2]][0]+=1
        if Response.corr == 1 or Score == 1:
            block_results[thisBlock[2]][1]+=1
            rtList.append(round(t*1000)-500)
            feedbackImage='tick_white.png'
        else:
            feedbackImage='cross_white.png'

        if thisBlock[2] > 0:
            showFeedback = 0
    TextComponent stroop_text
      color [set every repeat] = $colours[thisColour][0]
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = .5
      text [set every repeat] = $Word
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    KeyboardComponent Response
      allowedKeys = 'd','f','j','k'
      correctAns = $colours[0][1]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .5
      storeCorrect = True
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    PolygonComponent button1
      fillColor = $colours[0][0]
      lineWidth = 5
      nVertices = 72
      pos = (-buttonGap, -buttonOffset+buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
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    PolygonComponent button2
      fillColor = $colours[1][0]
      lineWidth = 5
      nVertices = 72
      pos = (buttonGap, -buttonOffset+buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
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    PolygonComponent button3
      fillColor = $colours[2][0]
      lineWidth = 5
      nVertices = 72
      pos = (-buttonGap, -buttonOffset-buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
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    PolygonComponent button4
      fillColor = $colours[3][0]
      lineWidth = 5
      nVertices = 72
      pos = (buttonGap, -buttonOffset-buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
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  Routine preBlock
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        thisBlock=block_selection.pop()
        useRows=str(thisBlock[0])
        rtList=[]
    CodeComponent code_both2
      Code Type = Both
      Begin JS Routine:
        useColours =Array(10).fill([0,1,2,3]).flat();
        util.shuffle(useColours);
      Begin Routine:
        useColours=[0, 1, 2, 3] * 10
        shuffle(useColours)
  Routine postBlock
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        sort(rtList)
        rtMid = (len(rtList)+1)/2

        if rtMid == round(rtMid):
            block_results[thisBlock[2]][2]=rtList[int(rtMid)]
        else:
            block_results[thisBlock[2]][2]=(rtList[int(rtMid-.5)]+rtList[int(rtMid+.5)])/2

        if thisBlock[2] == 0:
            text_3.text='That was the end of the practice trials.\n\nYou scored '+str(block_results[thisBlock[2]][1])+' out of '+str(block_results[thisBlock[2]][0])
            text_4.text='Please wait for 10 seconds before starting the first block'
            waitTime = 10
        elif thisBlock[2] == 1:
            text_3.text='That was the end of the first block.'
            text_4.text='Please wait for 30 seconds before starting the second block'
            waitTime = 30
        elif thisBlock[2] == 2 and nBlocks==4:
            text_3.text='That was the end of the second block.'
            text_4.text='Please wait for 30 seconds before starting the third block'
            waitTime = 30
        else:
            text_3.text='Thank you for taking part.'
            text_4.text='Please submit your data and then wait for the green \"Thank you for your patience\" message.'
            waitTime = 2
        pressSpace=0
      Each Frame:
        if t > waitTime and pressSpace==0:
            if touchscreen == 1:
                text_4.text='Continue'
                mouserec = mouse.getPos()
            else:
                text_4.text='Press space to continue'
            pressSpace=1
        elif pressSpace==1 and touchscreen == 1:
            mouseloc = mouse.getPos()
            if mouseloc[0]==mouserec[0] and mouseloc[1]==mouserec[1]:
                pass
            elif rec_2.contains(mouse):
                continueRoutine=False
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = ['space']
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 10
      startVal [time (s)] = $waitTime
      store = nothing
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    PolygonComponent rec_2
      fillColor = $[0.2,0.2,.2]
      lineWidth = 5
      pos = (0, -.45)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.09)
      startEstim = 10
      startVal [time (s)] = $waitTime
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  Routine feedback
    ImageComponent image
      image [set every repeat] = $feedbackImage
      opacity [set every repeat] = showFeedback
      size = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent button1_2
      fillColor = $colours[0][0]
      lineColor [set every repeat] = $butcol1
      lineWidth = 5
      nVertices = 72
      pos = (-buttonGap, -buttonOffset+buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent button2_2
      fillColor = $colours[1][0]
      lineColor [set every repeat] = $butcol2
      lineWidth = 5
      nVertices = 72
      pos = (buttonGap, -buttonOffset+buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent button3_2
      fillColor = $colours[2][0]
      lineColor [set every repeat] = $butcol3
      lineWidth = 5
      nVertices = 72
      pos = (-buttonGap, -buttonOffset-buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent button4_2
      fillColor = $colours[3][0]
      lineColor [set every repeat] = $butcol4
      lineWidth = 5
      nVertices = 72
      pos = (buttonGap, -buttonOffset-buttonGap)
      saveStartStop = False
      shape = regular polygon...
      size = buttonSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine start
  LoopInitiator outer_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nBlocks
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    Routine preBlock
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $useRows
      conditionsFile = estroop.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Word': 'gradual', 'Type': 'Practice'},
        {'Word': 'primate', 'Type': 'Practice'},
        {'Word': 'distant', 'Type': 'Practice'},
        {'Word': 'carrier', 'Type': 'Practice'},
        {'Word': 'careful', 'Type': 'Practice'},
        {'Word': 'overall', 'Type': 'Practice'},
        {'Word': 'gardener', 'Type': 'Practice'},
        {'Word': 'backdrop', 'Type': 'Practice'},
        {'Word': 'shoulder', 'Type': 'Practice'},
        {'Word': 'bulletin', 'Type': 'Practice'},
        {'Word': 'describe', 'Type': 'Practice'},
        {'Word': 'cloakroom', 'Type': 'Practice'},
        {'Word': 'area', 'Type': 'Practice'},
        {'Word': 'back', 'Type': 'Practice'},
        {'Word': 'crumb', 'Type': 'Practice'},
        {'Word': 'silverware', 'Type': 'Neutral'},
        {'Word': 'plywood', 'Type': 'Neutral'},
        {'Word': 'author', 'Type': 'Neutral'},
        {'Word': 'acre', 'Type': 'Neutral'},
        {'Word': 'conservative', 'Type': 'Neutral'},
        {'Word': 'basis', 'Type': 'Neutral'},
        {'Word': 'branch', 'Type': 'Neutral'},
        {'Word': 'allow', 'Type': 'Neutral'},
        {'Word': 'oven', 'Type': 'Neutral'},
        {'Word': 'bathroom', 'Type': 'Neutral'},
        {'Word': 'omission', 'Type': 'Neutral'},
        {'Word': 'abbey', 'Type': 'Neutral'},
        {'Word': 'appendix', 'Type': 'Neutral'},
        {'Word': 'weatherman', 'Type': 'Neutral'},
        {'Word': 'lens', 'Type': 'Neutral'},
        {'Word': 'biscuit', 'Type': 'Neutral'},
        {'Word': 'involvement', 'Type': 'Neutral'},
        {'Word': 'derive', 'Type': 'Neutral'},
        {'Word': 'almond', 'Type': 'Neutral'},
        {'Word': 'asparagus', 'Type': 'Neutral'},
        {'Word': 'clinic', 'Type': 'Neutral'},
        {'Word': 'adjacent', 'Type': 'Neutral'},
        {'Word': 'tartar', 'Type': 'Neutral'},
        {'Word': 'accept', 'Type': 'Neutral'}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
      Routine stroop
      Routine feedback
    LoopTerminator trials
    Routine postBlock
  LoopTerminator outer_loop
